# Configuration for the SPARC v2 system with plates:
# 1. Vis-NIR
# 2. Fiber module (to time correlator)
SPARC2-VisNIR-TR: {
    class: Microscope,
    role: sparc2,
    children: ["SEM E-beam", "SEM Detector", "Calibration Light",
               "Optical Path Properties", "Spectrometer Selector",
               "AR Camera", "VisNIR Int Spectrometer", "Newton Camera", "UV Int Spectrometer",
               "Spectrograph", "Fiber align",
               "Time Correlator", "Photon counter 1", "Photon counter 2",
               "Spec Filter Wheel", "Spec CCD Flipper", "Spectrograph focus",
               "Mirror Actuators", "Mirror Actuators in XY referential", "Slit",
               "Lens1 Mover", "Lens2 Switch",
               "TC Filter Wheel", "TC Optical Density Filter", "Shutter 0", "Shutter 1"],
}

# Light (lamp with known spectrum)
"Calibration Light": {
    class: light.Light,
    role: "brightlight",
    power_supplier: "Power Control Unit",
    affects: ["AR Camera", "VisNIR Int Spectrometer", "Newton Camera", "UV Int Spectrometer", "Time Correlator", "Photon counter 1", "Photon counter 2"],
}

"Power Control Unit": {
    class: powerctrl.PowerControlUnit,
    role: "power-control",
    init: {
#        port: "/dev/fake", # for simulator
        port: "/dev/ttyPMT*",
        pin_map: {
            "Calibration Light": 6,
            "AR Camera": 0,
            "Spectrograph": 2,
            "Optical Actuators": 4,
        },
        delay: { # Time it takes before a component is accessible
            "Calibration Light": 0, # To turn on/off the light, it's immediate
            "AR Camera": 2,
            "Spectrograph": 9, # SR-193 needs a looong time to initialise  # TODO-> back to 90
            "Optical Actuators": 1,
        },
        init: { # Which component to power on from the very beginning (to save time)
            "Calibration Light": True, # turn if on initially, to warm up. It will automatically be off when the component starts
            "AR Camera": True,
            "Spectrograph": True,
            "Optical Actuators": True,
        },
        # List of EEPROM IDs (of the plates) which are required to start properly
        # TODO: remove the one from the power control unit itself
        ids: [],
    }
}

# Quanta SEM driven via external X/Y connection, using a DAQ board
"SEM Scan Interface": {
    class: semcomedi.SEMComedi,
    role: null,
    init: {device: "/dev/comedi0"},
    # more detectors can be added, if necessary
    children: {
       scanner: "SEM E-beam",
       detector0: "SEM Detector",
    }
}

# Connect:
# X -> AO 0
# Y -> AO 1
# Ground -> AO GND
"SEM E-beam": {
    # Internal child of SEM ExtXY, so no class
    creator: "SEM Scan Interface",
    role: e-beam,
    init: {
        channels: [1, 0],
        limits: [[0, 5], [0, 5]],  # V
        park: [0, 0], # V
        # Digital output port mapping on the Delmic scanning box v2:
        # 0 = Relay
        # 1 = Open drain output (Y0.0)
        # 2 = Digital Out 1
        # 3 = Digital Out 0
        # 4 = Status led
        scanning_ttl: {4: True}, # output ports -> True (indicate scanning) or False (indicate parked)
        settle_time: 5.e-6, # s
        hfw_nomag: 0.14, # m
    },
    properties: {
        scale: [8, 8], # (ratio) : start with a pretty fast scan
        dwellTime: 10.e-6, # s
        magnification: 100, # (ratio)
    },
    affects: ["SEM Detector", "VisNIR Int Spectrometer", "AR Camera","Newton Camera", "UV Int Spectrometer", "Time Correlator", "Photon counter 1", "Photon counter 2"] # affects the CCD in case of cathodoluminescence
}

# Must be connected on AI1/AI9 (differential)
"SEM Detector": { # aka ETD
    # Internal child of SEM Scan Interface, so no class
    role: se-detector,
    init: {
        channel: 0, # 0-> sawtooth waves, 1-> square waves
        limits: [-3, 3], # V
    },
}

"Time Correlator": {
    class: picoquant.PH300,
    role: time-correlator,
    init: {
        #device: "fake",
        device: null, # put serial number, or it will pick the first one found
        disc_volt: [50.e-3, 50.e-3], # V, discriminator for detectors 0/1 (< 0.8 V)
        zero_cross: [10.e-3, 10.e-3], # V (< 20 mV)
        shutter_axes: {
        # internal child role of the actuator -> axis name, position when shutter is closed (ie, protected), position when opened (receiving light)
            "shutter0": ["x", 0, 1],
            "shutter1": ["x", 0, 1],
        },
    },
    # These children allow to have access to the raw data on the PMTs
    children: {
        "detector0": "Photon counter 1",
        "detector1": "Photon counter 2",
        "shutter0": "Shutter 0",
        "shutter1": "Shutter 1",
    },
}

"Photon counter 1": {
    # Internal child of "Time Correlator", so no class
    role: photo-detector0,
}

"Photon counter 2": {
    # Internal child of "Time Correlator", so no class
    role: photo-detector1,
}

"Shutter 0": {
    class: actuator.MultiplexActuator,
    role: "shutter0",
    children: {"x": "Time-Correlator Actuators"},
    init: {
        axes_map: {"x": "shutter0"},
    },
    affects: ["Time Correlator", "Photon counter 1"],
}

"Shutter 1": {
    class: actuator.MultiplexActuator,
    role: "shutter1",
    children: {"x": "Time-Correlator Actuators"},
    init: {
        axes_map: {"x": "shutter1"},
    },
    affects: ["Time Correlator", "Photon counter 2"],
}

# Depending exactly on the configuration, it might also be used for spectrometer
# Zyla
"AR Camera": {
    class: andorcam3.AndorCam3,
    role: ccd0,
    power_supplier: "Power Control Unit",
    init: {
        device: 0,  # The first Andor 3 available (there is only one)
    },
    properties: {
        targetTemperature: -10, # °C
    },
}

# Spectrometer = Andor Zyla + Shamrock SR193 (connected via USB)
"VisNIR Int Spectrometer": {
    class: spectrometer.CompositedSpectrometer,
    role: spectrometer0,
    children: {detector: "AR Camera", spectrograph: "Spectrograph"},
    init: {
        transp: [1, 2], # only applied to the spectrometer data (not raw CCD)
    },
    properties: {
        #binning: [4, 512], #Only the center TODO
    },
}


# Newton DU920P, mostly for UV (1024 x 255)
"Newton Camera": {
    class: andorcam2.AndorCam2,
    role: sp-ccd1,
    init: {
        #device: "23195",
        device: "fake",
        image: "sparc-spec-sim.h5", # only for simulator
    },
    properties: {
        targetTemperature: -65, # °C
    },
}

"UV Int Spectrometer": {
    class: spectrometer.CompositedSpectrometer,
    role: spectrometer1,
    children: {detector: "Newton Camera", spectrograph: "Spectrograph"},
    init: {
        transp: [1, 2], # only applied to the spectrometer data (not raw CCD)
    },
    properties: {
        #binning: [4, 255],
    },
}


# Internal Spectrograph = Kymera 193 (+ 2 cameras)
"Spectrograph": {
    class: andorshrk.Shamrock,
    role: spectrograph,
    power_supplier: "Power Control Unit",
    init: {
        device: "KY-3595",  # Note: as of libandor2.103.30022, if 2 Kymera are connected, only one serial number can be read -> turn off the second one
        #device: "fake",
        slits: {1: "slit-in", # INPUT_SIDE
        },
        bands: { # The filters in the filter-wheel
            1: "pass-through",
            6: [430.e-9, 470.e-9], # pos -> m,m
            3: [530.e-9, 570.e-9],
            4: [580.e-9, 620.e-9],
            5: [630.e-9, 670.e-9],
            2: [780.e-9, 820.e-9],
        },
        fstepsize: 30.e-6, # m, size of one focus step  (Note: it used to be set at 10µm, but from physical inspection 30µm seems more correct)
    },
    affects: ["AR Camera", "VisNIR Int Spectrometer", "Newton Camera", "UV Int Spectrometer"],
}

"Spectrograph focus": {
    class: actuator.MultiplexActuator,
    role: "focus",
    children: {"z": "Spectrograph"},
    init: {
        axes_map: {"z": "focus"},
    },
    affects: ["AR Camera", "VisNIR Int Spectrometer", "Newton Camera", "UV Int Spectrometer"],
}

# Provide the mirror (aka port selector) of the spectrograph as a separate component
# It doesn't select the camera (as there is only one), but allows to make some
# kind of blanker for the CCD
"Spec CCD Flipper": {
    class: actuator.FixedPositionsActuator,
    role: "spec-det-selector",
    children: {"rx": "Spectrograph"},
    init: {
        axis_name: "flip-out",
        positions: {
            0: ["AR Camera", "VisNIR Int Spectrometer"],
            1.5707963267948966: ["Newton Camera", "UV Int Spectrometer"],
        },
    },
    affects: ["AR Camera", "VisNIR Int Spectrometer", "Newton Camera", "UV Int Spectrometer"],
}

# Provide the filter wheel of the spectrograph as a separate component
"Spec Filter Wheel": {
    class: actuator.MultiplexActuator,
    role: filter,
    children: {"band": "Spectrograph"},
    init: {
        axes_map: {"band": "band"},
    },
    affects: ["AR Camera", "VisNIR Int Spectrometer"],
}

"Optical Path Properties": {
    class: static.OpticalLens,
    role: lens,
    # Standard mirror config
    init: {
       mag: 0.31, # ratio
       na: 0.2, # ratio, numerical aperture
       ri: 1.0, # ratio, refractive index
       pole_pos: [516, 634], # (px, px), position of the pole (aka the hole in the mirror)
       x_max: 13.25e-3,  # m, the distance between the parabola origin and the cutoff position
       hole_diam: 0.6e-3,  # m, diameter the hole in the mirror
       focus_dist: 0.5e-3,  # m, the vertical mirror cutoff, iow the min distance between the mirror and the sample
       parabola_f: 2.5e-3,  # m, parabola_parameter=1/4f
       # TODO: update for the Quanta
       rotation: -1.570796326795, # rad, 90° rotation between optical axis and SEM Y axis
    },
    affects: ["AR Camera", "VisNIR Int Spectrometer", "Newton Camera", "UV Int Spectrometer", "Time Correlator", "Photon counter 1", "Photon counter 2"]
}

# Controller for the motors moving the various parts of the optical box
# DIP must be configured with address 2 (= 0100000)
"Optical Actuators": {
    class: tmcm.TMCLController,
    role: null,
    power_supplier: "Power Control Unit",
    init: {
        #port: "/dev/fake6",
        #address: null,
        port: "/dev/ttyTMCM*",
        address: 2,
        axes: ["l1", "l2", "spec-sel", "fiby", "slit"],
        # These values only need to be roughly correct
        ustepsize: [25.1e-9, 25.1e-9, 25.1e-9, 5.86e-9, 5.e-9], # m/µstep
        refproc: "Standard",
        refswitch: {"l1": 0, "l2": 0, "spec-sel": 4, "fiby": 4}, 
        inverted: ["l2"],
    },
}

# The first lens of Plate 1, able to move along the whole range
"Lens1 Mover": {
    class: actuator.MultiplexActuator,
    role: "lens-mover",
    children: {"x": "Optical Actuators"},
    init: {
        axes_map: {"x": "l1"},
        ref_on_init: ["x"],
    },
    metadata: {
        # Default position of the lens (can be improved by user)
        FAV_POS_ACTIVE: {"x": 0.02637} # m
    },
    affects: ["AR Camera", "VisNIR Int Spectrometer", "Newton Camera", "UV Int Spectrometer", "Time Correlator", "Photon counter 1", "Photon counter 2"],
}

# The second lens of Plate 1, either to working or parking position
"Lens2 Switch": {
    class: actuator.FixedPositionsActuator,
    role: "lens-switch",
    children: {"x": "Optical Actuators"},
    init: {
        axis_name: "l2",
        positions: {
            -0.0513: "on",
            -0.0: "off", # completely out of the path
        },
    },
    affects: ["AR Camera", "VisNIR Int Spectrometer", "Newton Camera", "UV Int Spectrometer", "Time Correlator", "Photon counter 1", "Photon counter 2"],
}

# Control the slit position to either fully-open or small (dependent on the spectrometer slit-in)
"Slit": {
    class: actuator.FixedPositionsActuator,
    role: "slit-in-big",
    children: {"x": "Optical Actuators"},
    init: {
        axis_name: "slit",
        positions: {
            0: "on", # fully opened
            0.0012: "off", # opening based on the small slit
        },
    },
    affects: ["AR Camera", "VisNIR Int Spectrometer", "Newton Camera", "UV Int Spectrometer"],
}

# Note that the next two components actually move the _same_ axis!
# Mirror & Lens in Plate 2, to change X&Y of fiber alignment
"Fiber align": {
    class: actuator.MultiplexActuator,
    role: "fiber-aligner",
    children: {"x": "Optical Actuators", "y": "Optical Actuators"},
    init: {
        axes_map: {"x": "spec-sel", "y": "fiby"},
    },
    affects: ["Time Correlator", "Photon counter 1", "Photon counter 2"],
}

# Mirror in Plate 2, selects between spectrometer and external optics (time-correlator)
"Spectrometer Selector": {
    class: actuator.MultiplexActuator,
    role: "spec-selector",
    children: {"x": "Optical Actuators"},
    init: {
        axes_map: {"x": "spec-sel"},
        ref_on_init: ["x"],
    },
    metadata: {
        # Position of the mirror to select the external spectrometer (can be improved by user)
        FAV_POS_ACTIVE: {"x": 0.0116214336}, # m
        FAV_POS_ACTIVE_DEST: ["Fiber align", "Time Correlator", "Photon counter 1", "Photon counter 2"],
        FAV_POS_DEACTIVE: {"x": 0.013419}, # m
        FAV_POS_DEACTIVE_DEST: ["Camera", "Integrated Spectrometer", "Spectral Camera", "Spectrometer"], # m
    },
    affects: ["AR Camera", "VisNIR Int Spectrometer", "Newton Camera", "UV Int Spectrometer", "Time Correlator", "Photon counter 1", "Photon counter 2"],
}

"Time-Correlator Actuators": {
    class: tmcm.TMCLController,
    role: null,
    init: {
        port: "/dev/ttyTMCM*",
        address: 6,
        axes: ["od", "fw"],
        rng: [[-1, 3], null],
        # od: 3.272e-5 rad/ustep * 360/(2pi) deg/rad * 3.96/270 od/deg = 2.75e-5 od/ustep
        ustepsize: [2.75e-05, 3.392e-5], # od/µstep, rad/µstep 
        unit: ["od", "rad"],
        refproc: "Standard",
        refswitch: {"fw": 0, "od": 0},
        inverted: ["od"],
        do_axes: {
            4: ["shutter0", 0, 1, 1],  # axis: [position when enabled (closed), position when disabled (open), transition period (s)]
            5: ["shutter1", 0, 1, 1],
        },
        # LED protection for digital output channels
        led_prot_do: {
            # VERY IMPORTANT TO GET THIS RIGHT, WRONG VALUE WILL DAMAGE INSTRUMENT!
            4: 0,  # output when leds are on (0 = shutter closed)
            5: 0
        },
    },
}

"TC Filter Wheel": {
    class: actuator.FixedPositionsActuator,
    role: "tc-filter",
    children: {"band": "Time-Correlator Actuators"},
    init: {
        axis_name: "fw",
        # It supports up to 8 filters
        positions: {
            # pos (rad) -> m,m
            0.027484197:       "pass-through",     # 1
            0.81288236:        [375.e-9, 425.e-9], # 2
            1.598280523:       [425.e-9, 475.e-9], # 3
            2.383674197:       [475.e-9, 525.e-9], # 4
            3.169074197:       [525.e-9, 575.e-9], # 5
            3.954475014:       [575.e-9, 625.e-9], # 6
            4.739874197:       [625.e-9, 675.e-9], # 7
            5.525274197:       [675.e-9, 725.e-9], # 8
        },
        cycle: 6.283185, # position of ref switch (0) after a full turn
    },
    affects: ["Time Correlator", "Photon counter 1", "Photon counter 2"],
}

# TODO: update when the rotation -> linear position actuator exists
"TC Optical Density Filter": {
    class: actuator.LinearActuator,
    role: "tc-od-filter",
    children: {"density": "Time-Correlator Actuators"},
    init: {
        axis_name: "od",
        # position when referenced (adjusted to be a multiple of the actuator stepsize)
        offset: -3.0000025, # od
    },
    affects: ["Time Correlator", "Photon counter 1", "Photon counter 2"],
}


# Controller for moving the 'Redux' stage
# DIP must be configured with address 4 (= 0010000)
"Mirror Actuators": {
    class: tmcm.TMCLController,
    role: "mirror",
    init: {
        port: "/dev/fake6",
        address: null,
        axes: ["s", "l"],
        ustepsize: [2.e-6, 2.e-6], # m/µstep, for simulator
        refproc: "Standard",
        refswitch: {"s": 0, "l": 0},
    },
    metadata: {
        # Default position of the mirror engaged (will be improved during alignment)
        # TODO: update for Quanta Redux stage
        FAV_POS_ACTIVE: {"l": 0.0707344568, "s": 0.0028446378},  # m, m
    },
}

# Internal component to convert between the referential of the mirror actuators
# and the X/Y referential of the SEM. Used by the mirror alignment functions.
"Mirror Actuators in XY referential": {
    class: actuator.ConvertStage,
    role: "mirror-xy",
    children: {"orig": "Mirror Actuators"},
    init: {
        axes: ["l", "s"], # mapped respectively to X, Y
        rotation: -1.0471975511965976, # rad (= 60°)
        # Note: if you want to use absolute moves, add a "translation" too
    },
}

