# Allows to control an Orsay from Odemis (and nothing else)
Orsay: {
    class: Microscope,
    role: orsaymic,
    children: ["Pneumatic Suspension", "Chamber", "Pumping System", "UPS", "GIS", "GIS-reservoir", "FIB-vacuum",
               "FIB-source", "FIB-beam"]
}

# Connection to the Orsay server
# Simulation:   192.168.56.101
# Hardware:     192.168.30.101
"OrsayServer": {
    class: orsay.OrsayComponent,
    role: null,
    init: {
           host: "192.168.56.101"
    },
    children: { pneumatic-suspension: "Pneumatic Suspension",
                pressure: "Chamber",
                pumping-system: "Pumping System",
                ups: "UPS",
                gis: "GIS",
                gis-reservoir: "GIS-reservoir",
                fib-vacuum: "FIB-vacuum",
                fib-source: "FIB-source",
                fib-beam: "FIB-beam"
    }
}

"Pneumatic Suspension": {
    role: pneumatic-suspension,
    init: {}
}

"Chamber": {
    role: chamber,
    init: {}
}

"Pumping System": {
    role: pumping-system,
    init: {}
}

"UPS": {
    role: ups,
    init: {}
}

"GIS": {
    role: gis,
    init: {}
}

"GIS-reservoir": {
    role: gis-reservoir,
    init: {}
}

"FIB-vacuum": {
    role: fib-vacuum,
    init: {}
}

"FIB-source": {
    role: fib-source,
    init: {}
}

"FIB-beam": {
    role: fib-beam,
    init: {}
}
