SEM: {
  class: Microscope,
  role: sem,
  children: ["EBeam Scanner", "EBeam Focus", "EBeam Stage",
             "EBeam Detector"],
}

# Connects to TFS Microscopes, the Support PC should be running the
# Delmic XTAdapter. Update the address to match that of the Support PC.
"SEM EXT": {
  class: xt_client.SEM,
  role: null,
  init: {
    address: "PYRO:Microscope@0.0.0.0:4242",
  },
  children: {
    scanner: "EBeam Scanner",
    fib-scanner: "FIB Scanner",
    focus: "EBeam Focus",
    stage: "EBeam Stage",
    detector: "EBeam Detector",
  }
}

"FIB Scanner": {
  role: ion,
  init: {
  },
}

"EBeam Scanner": {
  role: e-beam,
  init: {
    hfw_nomag: 0.11,
  },
}

"EBeam Focus": {
  role: ebeam-focus,
}

"EBeam Stage": {
  role: stage,
  init: {
    inverted: ["x", "y"],
  },
  affects: ["EBeam Scanner"],
}

"EBeam Detector": {
  role: se-detector,
}
