MultiBeamSEM: {
    class: Microscope,
    role: mbsem,
    children: ["Sample Stage", "DiagnosticCam", "DiagnosticCam Focus"],
}

# Axes: X is horizontal on screen (going left->right), physical: far->close when looking at the door
#       Y is vertical on screen (going bottom->top), physical: left->right when looking at the door
"DiagnosticCam": {
    class: simcam.Camera,
    role: diagnostic-ccd,
    dependencies: {focus: "DiagnosticCam Focus"},
    init: {
        image: "../acq/align/test/multiprobe01.tiff",
    },
    metadata: {
        # Adjust the metadata to have a small depthOfField, which makes the focus blur stronger
        LENS_MAG: 60,
        LENS_NA: 0.95,
        LENS_RI: 0.13,
    },
}

"DiagnosticCam Focus": {
    class: actuator.MultiplexActuator,
    role: diagnostic-cam-focus,
    children: {"z": "Sample Stage"},
    init: {
        axes_map: {"z": "z"}
    },
    properties: {
        speed: {'z': 0.001} # m/s
    }
}


"Sample Stage": {
    class: simulated.Stage,
    role: stage,
    init: {
        axes: ["z"],
        ranges: {"z": [0, 100.e-6]}
    },
}

