# Configuration to simulate a SPARC system without having any hardware.
SimSPARC: {
    class: Microscope,
    role: sparc,
    emitters: ["EBeam ExtXY", "AR Lens"],
    detectors: ["SED ExtXY", "ARSimCam", "AndorSpec"],
    actuators: ["MirrorMover"],
}

# Can simulate a SEM connected to a DAQ board by using the comedi_test driver:
# sudo modprobe comedi comedi_num_legacy_minors=4
# sudo modprobe comedi_test
# sudo comedi_config /dev/comedi0 comedi_test 1000000,1000000
#"SEM ExtXY": {
#    class: semcomedi.SEMComedi,
#    role: none,
#    init: {device: "/dev/comedi0"},
#    # more detectors can be added, if necessary
#    children: {scanner: "EBeam ExtXY", detector0: "SED ExtXY"}
#}
#
## Connect:
## X -> AO 0
## Y -> AO 1
## Ground -> AO GND
#"EBeam ExtXY": {
#    # Internal child of SEM ExtXY, so no class
#    role: e-beam,
#    init: {
#        channels: [1, 0],
#        limits: [[0, 5], [0, 5]],  # V
#        settle_time: 10.e-6, # s
#        hfw_nomag: 10.e-3, # m
#    },
#    properties: {
#        scale: [8, 8], # (ratio) : start with a pretty fast scan
#        dwellTime: 10.e-6, # s
#        magnification: 1000, # (ratio)
#    },
#    affects: ["SED ExtXY", SpecSimCam, ARSimCam] # affects the CCD in case of cathodoluminescence
#}
#
## Must be connected on AI 5/AI GND
#"SED ExtXY": { # aka ETD
#    # Internal child of Quanta ExtXY, so no class
#    role: se-detector,
#    init: {
#        channel: 0, # 0-> sawtooth waves, 1-> square waves
#        limits: [-3, 3] # V
#    },
#}

# This is a more realistic SEM simulator (image-wise, but less realistic HW-wise)
"SEM ExtXY": {
    class: simsem.SimSEM,
    role: none,
    init: {},
    # more detectors can be added, if necessary
    children: {scanner: "EBeam ExtXY", detector0: "SED ExtXY"}
}

"EBeam ExtXY": {
    # Internal child of Quanta ExtXY, so no class
    role: e-beam,
    init: {},
    affects: ["SED ExtXY", AndorSpec, ARSimCam] # affects the CCD in case of cathodoluminescence
}

"SED ExtXY": { # aka ETD
    # Internal child of Quanta ExtXY, so no class
    role: se-detector,
    init: {drift_period: 15} # seconds
}


"AR Lens": {
    class: static.OpticalLens,
    role: lens,
    init: {mag: 0.5, # ratio
           pole_pos: [695.5, 624], # (px, px), position of the pole (aka the hole in the mirror)
          }, 
    affects: ["ARSimCam"]
}

ARSimCam: {
    class: andorcam2.AndorCam2,
    role: ccd,
    init: {
       device: "fake",
       image: "andorcam2-fake-clara.tiff", # only for simulator
    },
}

#FakeSpec10: {
#    class: spectrometer.CompositedSpectrometer,
#    role: spectrometer,
#    children: {detector: "SpecSimCam",
#               spectrograph: "FakeSP2300i"
#              },
#    properties: {
#        binning: [4, 16],
#    },
#}
#
#SpecSimCam: {
#    class: andorcam2.FakeAndorCam2,
#    role: sp-ccd,
#    init: {device: 0,  # same as ARSimCam but it will actually be different device
#           image: "andorcam2-fake-clara.tiff", # only for simulator
#           }
#}
#
## Simulated SP-2300i, the spectrograph part of the Spec-10
#FakeSP2300i: {
#    class: spectrapro.FakeSpectraPro,
#    role: spectrograph,
#    affects: [SpecSimCam],
#    init: {
#        port: "/dev/ttySP",
#    },
#}

# Andor iDus 406 + Shamrock SR303i
AndorSpec: {
    class: andorshrk.AndorSpec, # Instantiates an Andorcam2 + Shamrock
    role: spectrometer,
    children: {andorcam2: "iDus", shamrock: "SR303i"},
    properties: {
        #binning: [4, 256],
    },
}

iDus: {
    # no class, as it's instantiated by AndorSpec
    role: sp-ccd,
    init: {
       device: "fake",
       image: "andorcam2-fake-clara.tiff", # only for simulator
    },
}

SR303i: {
    # no class, as it's instantiated by AndorSpec
    role: spectrograph,
    init: {
        device: "fake",
    },
}

MirrorMover: {
    class: simulated.Stage,
    role: mirror,
    affects: [AndorSpec, ARSimCam],
    init: {axes: ["x", "y", "rz", "ry"]}, # rz = yaw, ry = pitch
    properties: {
        speed: {"x": 0.1, "y": 0.1, "rz": 0.1, "ry": 0.1} #m/s
    }
}


